/*
 * Script to track sample motion and compensate with stage motion
 */
import org.micromanager.utils.ImageUtils;
import ij.process.FHT;
import ij.process.ImageProcessor;
import ij.process.ShortProcessor;
import ij.ImagePlus;
import java.awt.geom.Point2D;

pixelSize = 1.3;  // for 10x objective

ImageProcessor getSubImage(ImageProcessor proc, int x, int y, int w, int h) {
	proc2 = new ShortProcessor(w,h);
	proc2.insert(proc,-x,-y);
	return proc2;
}

ImageProcessor crossCorrelate(ImageProcessor proc1, ImageProcessor proc2) {
	h1 = new FHT(proc1);
	h2 = new FHT(proc2);
	h1.transform();
	h2.transform();
	result = h1.conjugateMultiply(h2);
	result.inverseTransform();
	result.swapQuadrants();
	result.resetMinAndMax();
	return result;
}

// Measures the displacement between two images by cross-correlating, and then finding the maximum value.
// Accurate to one pixel only.

Point measureDisplacement(ImageProcessor proc1, int size, Point prevPeak)
{
//	result = crossCorrelate(proc1, proc2);
//	img = new ImagePlus("",result);
//	p = ImageUtils.findMaxPixel(img);
//	d = new Point(p.x - img.getWidth()/2, p.y - img.getHeight()/2);
//	d2 = new Point2D.Double(d.x, d.y);
//	if (display)
//		img.show();

	proc1.set(963, 864, 100);
   //img= new ImagePlus("", proc1);
   //img.show();

	proc1s = getSubImage(proc1, prevPeak.x-size, prevPeak.y-size, size*2+1, size*2+1);
	p1 = ImageUtils.findMaxPixel(proc1s);
	// print(p1);
	p1.x += prevPeak.x-size;
	p1.y += prevPeak.y-size;
	print(p1);
	d2 = new Point(p1.x - prevPeak.x, p1.y - prevPeak.y);
	return d2;
}


// file locations
acqName = gui.getUniqueAcquisitionName("GCY8_5.5_");
rootDirName = "G:/FreelyMoving/Data/GCY8_Mix/6_05_19";

// Number of timepoints
nrFrames = 15000;
nrChannels = nrSlices = nrPositions = 1;
exposureMs = mmc.getExposure();
int msTrackPeriod = 1000;  // check for sample displacement every msTrackPeriod milliseconds
int groupSize = msTrackPeriod/exposureMs; // converted to number of exposures

// The size of region around peak1 in which peak2 will be searched
roiHalfWidth = 300; // user should check this to see if it makes sense; related to msTrackPeriod

// Stop Live mode (such as a Live window)
if (gui.isLiveModeOn())
	gui.enableLiveMode(false);
//mmc.stopSequenceAcquisition();

gui.openAcquisition(acqName, rootDirName,
   nrFrames/groupSize*groupSize, nrChannels, nrSlices, nrPositions,
   /* show */ true, /* save */ true);

width = (int) mmc.getImageWidth();
height = (int) mmc.getImageHeight();
bytesPerPixel = (int) mmc.getBytesPerPixel();
bitDepth = (int) mmc.getImageBitDepth();

gui.initializeAcquisition(acqName, width, height, bytesPerPixel, bitDepth);


toQuit = false;

for (g=0; g<nrFrames/groupSize; g++) {
	mmc.startSequenceAcquisition(groupSize, 0, true);

	frame = 0;
	while (mmc.getRemainingImageCount() > 0 || mmc.isSequenceRunning(mmc.getCameraDevice())) {
   	if (mmc.getRemainingImageCount() > 0) {
      	img = mmc.popNextTaggedImage();
			Point2D.Double point = gui.getXYStagePosition();
			img.tags.put("MeasuredStageX", point.getX());
			img.tags.put("MeasuredStageY", point.getY());
			img.tags.put("MeasuredStageZ", mmc.getPosition());

      	gui.addImageToAcquisition(acqName, g*groupSize+frame, 0, 0, 0, img);
//			gui.setContrastBasedOnFrame(acqName, 0, 0);
   	   if (g==0 && frame ==0) {
			gui.setContrastBasedOnFrame(acqName, 0, 0);
      		proc_prev = ImageUtils.makeProcessor(img);
				proc_prev.set(963, 864, 100);
			originalPeak =  ImageUtils.findMaxPixel(proc_prev);
			print(originalPeak);
			if (! (originalPeak.x - roiHalfWidth > 0 && originalPeak.y - roiHalfWidth > 0) ) {
				gui.showError("originalPeak is too close to image's edges");
				toQuit = true;
				break;
			}
//	      	stats = proc_prev.getStatistics();
// 	     	background = stats.mean;
//    	  	proc_prev.subtract(background);
      	}
      	else if (frame== groupSize-1) {
      		proc_curr = ImageUtils.makeProcessor(img);
//	      	proc_curr.subtract(background);
				displ = measureDisplacement(proc_curr, roiHalfWidth, originalPeak);
      		print(displ);
      		gui.setRelativeXYStagePosition(displ.x * pixelSize,	displ.y * pixelSize);
      	}
      	frame++;
   	}
   	else {
      	mmc.sleep(Math.min(0.5 * exposureMs, 20));
   	}
	}
	mmc.stopSequenceAcquisition();
	if (toQuit)
		break;
}

// moveRelative(dx, dy) {
// 	xystage = mmc.getXYStageDevice();
// 	//mmc.waitForDevice(xystage);
// 	startPos = gui.getXYStagePosition();
// 	//mmc.waitForDevice(xystage);
// 	gui.setXYStagePosition(startPos.x + dx, startPos.y + dy);
// 	//mmc.waitForDevice(xystage);
// 	//curPos = gui.getXYStagePosition();
// 	//return new Point2D.Double(curPos.x - startPos.x, curPos.y - startPos.y);
// }

